CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<image>.*)_(?P<X>X[0-9]*)(?P<Y>Y[0-9]*)_(?P<ChannelNumber>c[0-9]*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_c06")
    Name to assign these images:TZoneMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c05")
    Name to assign these images:PulpMask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c01")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c04")
    Name to assign these images:B220
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_c02")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:image
    Metadata category:X
    Metadata category:Y

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:PulpMask
    Name the primary objects to be identified:WhitePulp
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.000001
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:TZoneMask
    Name the primary objects to be identified:TZone
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.000001
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:WhitePulp
    Select the smaller identified objects:TZone
    Name the tertiary objects to be identified:Bzone
    Shrink smaller object prior to subtraction?:No

RunCellpose:[module_num:8|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
    Select the input image:DAPI
    Expected object diameter:15
    Detection mode:Cells
    Name the output object:Nuclei
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:B220, CD3, DAPI, PulpMask, TZoneMask
    Select objects to measure:Cells, Nuclei

FilterObjects:[module_num:11|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
    Select the objects to filter:Cells
    Name the output objects:BCells1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_B220
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

FilterObjects:[module_num:12|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
    Select the objects to filter:Cells
    Name the output objects:TCells1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_CD3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.125
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

CombineObjects:[module_num:13|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enabled:False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
    Select initial object set:BCells1
    Select object set to combine:TCells1
    Select how to handle overlapping objects:Merge
    Name the combined object set:WhitePulpClusters1

SplitOrMergeObjects:[module_num:14|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enabled:False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
    Select the input objects:WhitePulpClusters1
    Name the new objects:WhitePulpClusters
    Operation:Merge
    Maximum distance within which to merge objects:15
    Merge using a grayscale image?:No
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    Merging method:Distance
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
RelateObjects:[module_num:15|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enabled:False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
    Parent objects:WhitePulpClusters
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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enabled:False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
    Parent objects:WhitePulp
    Child objects:WhitePulpClusters
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:17|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
    Parent objects:WhitePulp
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:18|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
    Parent objects:Bzone
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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
    Parent objects:TZone
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:Bzone, Cells, Nuclei, TZone, WhitePulp
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:Cells
    Name the output image:CellsImage
    Select the color format:Grayscale
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
ConvertObjectsToImage:[module_num:23|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enabled:False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
    Select the input objects:WhitePulpClusters
    Name the output image:WhitePulpClustersImage
    Select the color format:Grayscale
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
SaveImages:[module_num:24|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:WhitePulpClustersImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<image>_\g<X>\g<Y>_WhitePulpClusters
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<image>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:CellsImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<image>_\g<X>\g<Y>_cells
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<image>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<image>_\g<X>\g<Y>_nuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|\g<image>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|\g<image>_\g<X>\g<Y>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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